PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 99):02.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  expName = DualTask
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine End
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    TextComponent text_end
      letterHeight = 36
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Ha finalizado el experimento.
        ¡Gracias por participar!
  Routine NasaTLX
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    TextComponent text_mental_demand
      letterHeight = 48
      pos = (-480, 400)
      startVal [time (s)] = 0.0
      text = Exigencia mental
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    SliderComponent slider_mental_demand
      forceEndRoutine = False
      granularity = 1
      labels = ("Baja", "", "Alta")
      letterHeight = 36
      pos = (-480, 270)
      size = (480, 10)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_fisical_demand
      letterHeight = 48
      pos = (-480, 80)
      startVal [time (s)] = 0.0
      text = Exigencia física
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    SliderComponent slider_fisical_demand
      forceEndRoutine = False
      granularity = 1
      labels = ("Baja", "", "Alta")
      letterHeight = 36
      pos = (-480, -70)
      size = (480, 10)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_temporal_demand
      letterHeight = 48
      pos = (-480, -270)
      startVal [time (s)] = 0.0
      text = Exigencia temporal
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    SliderComponent sider_temporal_demand
      forceEndRoutine = False
      granularity = 1
      labels = ("Baja", "", "Alta")
      letterHeight = 36
      pos = (-480, -360)
      size = (480, 10)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_effort
      letterHeight = 48
      pos = (480, 400)
      startVal [time (s)] = 0.0
      text = Esfuerzo
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    SliderComponent slider_effort
      forceEndRoutine = False
      granularity = 1
      labels = ("Baja", "", "Alta")
      letterHeight = 36
      pos = (480, 270)
      size = (480, 10)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_performance
      letterHeight = 48
      pos = (480, 80)
      startVal [time (s)] = 0.0
      text = Rendimiento
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    SliderComponent slider_performance
      forceEndRoutine = False
      granularity = 1
      labels = ("Bueno", "", "Malo")
      letterHeight = 36
      pos = (480, -70)
      size = (480, 10)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_frustation
      letterHeight = 48
      pos = (480, -270)
      startVal [time (s)] = 0.0
      text = Frustración
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    SliderComponent slider_frustation
      forceEndRoutine = False
      granularity = 1
      labels = ("Baja", "", "Alta")
      letterHeight = 36
      pos = (480, -360)
      size = (480, 10)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-10, 0, 10)
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pause
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    TextComponent text_pause
      letterHeight = 36
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""Este es el fin del ensayo {trials.thisN+1} de 5

        [Presiona barra espaciadora para contiunar]
        """
    KeyboardComponent key_resp_pause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent text_instructions
      letterHeight = 36
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 1000
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      text:
        A continuación se dará inicio al experimento. Tendrás dos tareas:

        - Sigue el círculo con el puntero y
        - Da clic con el mouse cada vez que aparezca la letra "X".

        Al finalizar deberás responder la escala de cómo te sentiste durante el experimento. Cuando termines, presiona la barra espaciadora para continuar.

        Si las instrucciones están claras presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Setup LSL outlet
        info = StreamInfo("Psychopy", "Markers", 1, 0, "string", "PsychopyUUID0001")
        outlet = StreamOutlet(info)
        outlet.push_sample(["begin_experiment"])
      Begin Experiment:
        #from numpy import random
        import random
        import math
        import psychopy.logging as log
        import time

        # Function to calculate distance between two points
        def distance(point1, point2):
            return ((point1[0] - point2[0])**2 + (point1[1] - point2[1])**2)**0.5

        def rad2grad(rad):
            return rad*180/math.pi

        def grad2rad(grad):
            return grad*math.pi/180

        def angle2origin(pos):
            if pos[0] >= 0:
                angle = math.atan(pos[1] / pos[0]) + math.pi
            else:
                angle = math.atan(pos[1] / pos[0])
            return angle

        # Experiment begin
        outlet.push_sample([f"Begin experiment"])

        # Define size of the circle
        circle_radius = 10
        circle_speed = 15
        angle_uncertainty = math.pi/2

        cross_color = "white"

        # Define boundaries
        boundary_x_min = -win.size[0] / 2 + circle_radius
        boundary_x_max = win.size[0] / 2 - circle_radius
        boundary_y_min = -win.size[1] / 2 + circle_radius
        boundary_y_max = win.size[1] / 2 - circle_radius

        # Define maximum tolerable distance from screen center
        x_min = -win.size[0] / 2
        x_max = win.size[1] / 2
        y_min = -win.size[0] / 2
        y_max = win.size[1] / 2

        # Define la duración del estímulo
        stimulus_duration = 0.5

        # promedio de las duraciones entre estimulos
        between_stimuli = 2.0

        # proportion of x in list of all letters
        n_x = 2
      Begin Routine:
        outlet.push_sample([f"begin_routine_{{trials.thisN+1}}"])

        routine_start_time = core.getTime()
        next_flash_time = routine_start_time + stimulus_duration + random.gauss(mu=between_stimuli, sigma=1) + 1 # Initial flash time

        stimulus = "X"
        all_letters = ["M", "N", "Y", "A", "U", "H"]

        all_letters = all_letters + (["X"] * n_x)

        last_flash_time = None
        offset_time = core.getTime() + stimulus_duration

        # Set the mouse and target at the center of the screen
        mouse.setPos([0,0])
        circle_pos = [0,0]
        circle.setPos([0,0])
        circle_direction = random.uniform(0, 2 * math.pi)  # Initial direction (random)

        # Log the trial number
        log.exp(f"Trial begin: {trials.thisN+1}")
      Each Frame:
        # Only start moving after one second (fixation cross)
        if core.getTime() >= routine_start_time + 1:
            # Calculate the new position based on speed and direction
            circle_pos[0] += circle_speed * math.cos(circle_direction)
            circle_pos[1] += circle_speed * math.sin(circle_direction)

        # Check square new position bassed of mouse direction
        square_pos = mouse.getPos()
        win.flip()

        # Randomly adjust direction
        if random.random() < 0.2:  # 20% chance of direction change on every frame
            circle_direction += random.uniform(-angle_uncertainty/2, angle_uncertainty/2)

        # Check for out of bounds conditions
        out_of_bounds = circle_pos[0] <= boundary_x_min or circle_pos[0] >= boundary_x_max
        out_of_bounds = out_of_bounds or circle_pos[1] <= boundary_y_min or circle_pos[1] >= boundary_y_max
        if out_of_bounds:
            circle_direction = angle2origin(circle.pos)

        mouse_pos = mouse.getPos()
        dist = distance(mouse_pos, circle.pos)
        log.exp(f"Distance = {dist}")

        # Update figure color based on distance (adjust the values)
        if dist < 100:
            square.borderColor = "limegreen"
        elif dist < 200:
            square.borderColor = "yellow"
        else:
            square.borderColor = "red"

        # Check for fixation cross flash
        if core.getTime() >= next_flash_time:
            last_flash_time = next_flash_time
            stimulus = random.choice(all_letters)
            win.flip()
            log.exp(f"New stimulus letter: {stimulus}")
            outlet.push_sample([f"Stimulus_letter{stimulus}"])
            next_flash_time = core.getTime() + stimulus_duration + random.gauss(mu=between_stimuli, sigma=1)  # Schedule the next flash
            offset_time = last_flash_time + stimulus_duration

        if core.getTime() >= offset_time:
           stimulus = ""
           win.flip()
           # log.exp(f"Removed stimulus letter")
      End Routine:
        outlet.push_sample([f"end_routine_{{trials.thisN+1}}"])
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    PolygonComponent square
      fillColor = transparent
      pos [set every frame] = square_pos
      shape = regular polygon...
      size = (40, 40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent fixation_cross
      color [set every frame] = $cross_color
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    PolygonComponent circle
      fillColor = white
      pos [set every frame] = circle_pos
      shape = circle
      size = (circle_radius*2, circle_radius*2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 59
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    TextComponent letter
      letterHeight = 48
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 59
      text [set every frame] = $stimulus
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  Routine Welcome
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    TextComponent text_welcome
      letterHeight = 36
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        ¡Te damos la bienvenida!

        [Presiona barra espaciadora para contiunar]
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Trial
    Routine NasaTLX
    Routine Pause
  LoopTerminator trials
  Routine End
